<!-- juan 
-->
<CompuCell3D Revision="20160512" Version="3.7.5">
   
   <Potts>
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="750" y="750" z="1"/>
      <Steps>75000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_y>Periodic</Boundary_y>
      <Boundary_x>Periodic</Boundary_x>
   </Potts>
   
   <Plugin Name="CellType">
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="myxo"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Volume">
   </Plugin>

   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="myxo">15.0</Energy>
      <Energy Type1="myxo" Type2="myxo">7.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="nutrients">
         <DiffusionData>
            <FieldName>nutrients</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <DiffusionCoefficient CellType="myxo">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="myxo">0.0</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="myxo">0.0</Secretion>
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="asg">
         <DiffusionData>
            <FieldName>asg</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant> <!-- ParameterScan:diffA -->
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <DiffusionCoefficient CellType="myxo">0.1</DiffusionCoefficient> <!-- ParameterScan:diffA -->
            <DecayCoefficient CellType="myxo">0.0</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="myxo">0.0</Secretion>
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="csg">
         <DiffusionData>
            <FieldName>csg</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant> <!-- ParameterScan:diffC -->
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <DiffusionCoefficient CellType="myxo">0.1</DiffusionCoefficient> <!-- ParameterScan:diffC -->
            <DecayCoefficient CellType="myxo">0.0</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="myxo">0.0</Secretion>
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="730" y="730" z="1"/>
         <Gap>2</Gap>
         <Width>5</Width>
         <Types>myxo</Types>
      </Region>
   </Steppable>
</CompuCell3D>
